# Generated by Configurator on Sun Aug 29 19:59:05 BST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,OpenCV,OpenCVgrabber,OpenCVgrabber

# Pre-init settings for devices
Property,OpenCV,Camera,Undefined

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
Property,Core,AutoShutter,1

# Roles
Property,Core,Camera,OpenCV
Property,OpenCV,Resolution,640x480
Property,OpenCV,PixelType,8bit


# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

