# Generated by Configurator on Thu Sep 05 16:50:33 BST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,Retiga R1,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Retiga R1
Property,Core,AutoShutter,1
Property,Retiga R1,TriggerMode,Bulb
Property,Retiga R1,Binning,2x2

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

Property,Retiga R1,ClearMode,Pre-Sequence
Property,Retiga R1,ShutterMode,Pre-Sequence
#Property,Retiga R1,ClearCycles,1

