# Generated by Configurator on Sun Aug 29 13:00:21 BST 2021

# Reset
Property,Core,Initialize,0

# Devices
#Device,Ximea,XIMEACamera,52601550
Device,Ximea,XIMEACamera,17983042
#Device,Ximea,XIMEACamera,38805650

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Ximea
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup

# PixelSize settings
#Property,Ximea,Acquisition timing mode,Frame rate
#Property,Ximea,Frame rate, 20
#Property,Ximea,GPI Mode,Trigger
#Property,Ximea,Trigger selector,Frame burst start
#Property,Ximea,Trigger source,Rising edge
#Property,Ximea,Acquisition frame burst count,10
#Property,Ximea,Acq. queue image count,11
#Property,Ximea,Acquisition timing mode,Frame rate
#Property,Ximea,Frame rate,10

