# Generated by Configurator on Sun Aug 29 13:00:21 BST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,testcam,XIMEACamera,52601550

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,testcam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup

# PixelSize settings
#Property,Ximea,GPI Mode,Trigger
#Property,Ximea,Trigger source,Rising edge
#Property,Ximea,Trigger selector,Exposure active
#Property,Ximea,GPO Mode,Exposure active

