# Generated by Configurator on Wed Jul 21 15:56:07 BST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,Kinetic,PVCAM,Camera-2

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Kinetic
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: camera mode
# Preset: Dynamic Range
ConfigGroup,camera mode,Dynamic Range,Kinetic,Port,Dynamic Range

# Preset: Sub-Electron
ConfigGroup,camera mode,Sub-Electron,Kinetic,Port,Sub-Electron

# Preset: Sensitivity
ConfigGroup,camera mode,Sensitivity,Kinetic,Port,Sensitivity



# PixelSize settings

