# Generated by Configurator on Tue Feb 25 14:56:23 GMT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,AutoShutter,1
#Property,DCam,PixelType,16bit

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

